<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Prefix</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>_FrameEvents.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>SyncQuad</Name>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>None</Suffix>
        <FileName />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Prefix</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>_Encoder.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>Encoder</Name>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>None</Suffix>
        <FileName />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Prefix</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>_Responses.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>Responses</Name>
        <Append>false</Append>
        <Overwrite>false</Overwrite>
        <Suffix>None</Suffix>
        <FileName />
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Tick</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Seed" />
        <Property Name="P" />
        <Property Name="Offset" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ContinuousSync</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Tick</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Seed" />
              <Property Name="P" />
              <Property Name="Offset" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SyncSequence">
                <p1:Seed>0</p1:Seed>
                <p1:P>1</p1:P>
                <p1:Offset>30</p1:Offset>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndTrial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Tick</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartTrial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>ClearOutputs</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="9" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ActiveTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>{0},{1}</Format>
        <Selector>Item1,Item2</Selector>
        <Name>SyncQuad</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpSync</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Request</Name>
      </Expression>
      <Expression xsi:type="osc:Parse">
        <osc:Address>/clear</osc:Address>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ClearOutputs</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigEncoder</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:LatestOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ActiveTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item2 as TrialID,
Item1 as Encoder)</scr:Expression>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>{0},{1}</Format>
        <Selector>TrialID,Encoder</Selector>
        <Name>Encoder</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigResponse</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:SampleOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ActiveTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item2 as TrialID,
Item1 as Response)</scr:Expression>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>{0},{1}</Format>
        <Selector>TrialID,Response</Selector>
        <Name>Responses</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="34" Label="Source1" />
      <Edge From="33" To="34" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>