<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.4"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LiveOrReplay</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>NotNull</scr:Name>
              <scr:Expression>it != null</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ReplayTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Parse">
                    <Separator>_</Separator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item1[0] as ExperimentDate,
Item1[1] as ExperimentNumber,
Item1[2] as AnimalID,
Item2 as TrialID)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TrialPrefix.bonsai" />
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Prefix</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Prefix</Name>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="StringProperty">
                      <Value>_Metadata.bin</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ArrayReader">
                      <p1:FileName />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>NotExperiment</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Address</Selector>
                        </Expression>
                        <Expression xsi:type="NotEqual">
                          <Operand xsi:type="StringProperty">
                            <Value>/experiment</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="osc:SendMessage">
                    <osc:Connection>Echo</osc:Connection>
                    <osc:Address />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Prefix</Name>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="StringProperty">
                      <Value>_Encoder.csv</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName />
                    <io:ScanPattern>%d,%d</io:ScanPattern>
                    <io:SkipRows>1</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>ReplayEncoder</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:EventPlayer" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TrialEncoder</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartTrial</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Prefix</Name>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="StringProperty">
                      <Value>_Responses.csv</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName />
                    <io:ScanPattern>%d,%b</io:ScanPattern>
                    <io:SkipRows>1</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>ReplayResponse</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:EventPlayer" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TrialResponse</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartTrial</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>Null</scr:Name>
              <scr:Expression>it == null</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LiveTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigEncoder</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:LatestOnUpdateFrame" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialEncoder</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigResponse</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:SampleOnUpdateFrame" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TrialResponse</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndTrial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>